PsychoPy2experiment version="2022.2.3"
Settings
  Data file delimiter = semicolon
  Experiment info = {'participant': '', 'session': '001', 'calibration': ''}
  Full-screen window = False
  Monitor = NoteAcer
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = PFFV
  keyboardBackend = ioHub
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Routines
  Routine explanation
    TextComponent instruct2
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      units = height
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      text:
        This is essentially the same thing but
        the mask is now smaller ( w,h = 2,2 in height units) so you can see
        what was happening.
    MouseComponent explanationFinish
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
      timeRelativeTo = Mouse onset
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  Routine Fix
    TextComponent fix_dot
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent code_1
      Code Type = Auto->JS
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      Begin Routine:
        rtStartTime = time.time()
        trials.addData('StartTime',rtStartTime)
        thisExp.addData('StartCross', datetime.now())
      End Routine:
        rtEndTime = time.time()
        trials.addData('EndTime',rtEndTime)
        thisExp.addData('EndCross', datetime.now())
  Routine Thanks
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Thank you for your participation!

        Please wait while your data is being saved.
  Routine Instruct
    TextComponent instructFirst
      letterHeight = 0.036
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        On the next screen, you will see a target. Always fix your gaze on the center of this target until it disappears.

        Next, a human face image will be presented. This face will be displayed as if you were looking through a small hole. Move ONLY your eyes to observe parts of the image.

        Your task will be to freely look at the faces in order to identify the expression of the observed face.

        Take as much time as you need to observe, and when you are ready, press [SPACE BAR] to proceed to the response page. Please read the instructions carefully before entering your responses, as once entered, they cannot be modified.

        This task will repeat several times, always in the same sequence: target, face, and response.

        >>To begin, press [SPACE BAR]
    KeyboardComponent finish_Instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import time
        from datetime import datetime
      Begin Experiment:
        thisExp.addData('StartExperiment', datetime.now())
      End Experiment:
        thisExp.addData('EndExperiment', datetime.now())
  Routine Trial_RM
    ImageComponent imageStimulus
      image [set every repeat] = $imageFile_Faces
      size = (843, 1143)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent imageAperture
      image = Images/Faces/plainWhite.png
      mask = Images/Faces/circleMask_24.png
      pos [set every frame] = mouse.getPos()
      size = (4,4)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        rtStartTime = time.time()
        trials.addData('StartTime',rtStartTime)
        thisExp.addData('StartRoutine', datetime.now())
      End Routine:
        rtEndTime = time.time()
        trials.addData('EndTime',rtEndTime)
        thisExp.addData('EndRoutine', datetime.now())
  Routine Question_F_RM
    TextComponent Quest_F_RM
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Qual expressão emocional a face parece lhe expressar?

        >> Fixe no centro da cruz, toda vez que ela aparecer.

        >>Inspecione a imagem livremente e quando tiver olhado o suficiente clique com o botão esquerdo do mouse para ser direcionado para pagina de resposta.

        >>Para iniciar, clique com mouse
  Routine Question_A_RM
    TextComponent Quest_A_RM
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Qual expressão emocional a face parece lhe expressar?

        >> Fixe no centro da cruz, toda vez que ela aparecer.

        >>Inspecione a imagem livremente e quando tiver olhado o suficiente clique com o botão esquerdo do mouse para ser direcionado para pagina de resposta.

        >>Para iniciar, clique com mouse
  Routine Question_S_RM
    TextComponent Quest_S_RM
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Qual expressão emocional a face parece lhe expressar?

        >> Fixe no centro da cruz, toda vez que ela aparecer.

        >>Inspecione a imagem livremente e quando tiver olhado o suficiente clique com o botão esquerdo do mouse para ser direcionado para pagina de resposta.

        >>Para iniciar, clique com mouse
  Routine Question
    TextComponent Quest
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Qual expressão a face lhe pareceu expressar?

        >> Fixe no centro da cruz, toda vez que ela aparecer.

        >> Inspecione a imagem livremente e quando tiver olhado o suficiente clique com o botão esquerdo do mouse para ser direcionado para pagina de resposta.

        >> Para iniciar, clique com mouse
    MouseComponent Second_Instruct
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine Response
    ImageComponent Question_1
      image = Images/Screens/Q1.jpg
      size = (952, 697)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent Resp_Q1
      allowedKeys = 'num_1', 'num_2', 'num_3', 'num_4', 'num_5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        rtStartTime = time.time()
        trials.addData('StartTime',rtStartTime)
        thisExp.addData('StartQ1', datetime.now())
      End Routine:
        rtEndTime = time.time()
        trials.addData('EndTime',rtEndTime)
        thisExp.addData('EndQ1', datetime.now())
  Routine Response_Conf
    ImageComponent Question_2
      image = Images/Screens/Q2.jpg
      size = (952, 697)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent Resp_Q2
      allowedKeys = 'num_1', 'num_2', 'num_3', 'num_4', 'num_5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        rtStartTime = time.time()
        trials.addData('StartTime',rtStartTime)
        thisExp.addData('StartQ2', datetime.now())
      End Routine:
        rtEndTime = time.time()
        trials.addData('EndTime',rtEndTime)
        thisExp.addData('EndQ2', datetime.now())
Flow
  Routine Instruct
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:30
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'imageFile_Faces': 'Images/Faces/AF01HAS.jpg', 'Expressions': 'Happiness', 'CorrResp': 1},
      {'imageFile_Faces': 'Images/Faces/AM02HAS.jpg', 'Expressions': 'Happiness', 'CorrResp': 1},
      {'imageFile_Faces': 'Images/Faces/AF02HAS.jpg', 'Expressions': 'Happiness', 'CorrResp': 1},
      {'imageFile_Faces': 'Images/Faces/AM04HAS.jpg', 'Expressions': 'Happiness', 'CorrResp': 1},
      {'imageFile_Faces': 'Images/Faces/AF06HAS.jpg', 'Expressions': 'Happiness', 'CorrResp': 1},
      {'imageFile_Faces': 'Images/Faces/AM31HAS.jpg', 'Expressions': 'Happiness', 'CorrResp': 1},
      {'imageFile_Faces': 'Images/Faces/AF03SAS.jpg', 'Expressions': 'Sadness', 'CorrResp': 2},
      {'imageFile_Faces': 'Images/Faces/AM16SAS.jpg', 'Expressions': 'Sadness', 'CorrResp': 2},
      {'imageFile_Faces': 'Images/Faces/AF07SAS.jpg', 'Expressions': 'Sadness', 'CorrResp': 2},
      {'imageFile_Faces': 'Images/Faces/AM25SAS.jpg', 'Expressions': 'Sadness', 'CorrResp': 2},
      {'imageFile_Faces': 'Images/Faces/AF17SAS.jpg', 'Expressions': 'Sadness', 'CorrResp': 2},
      {'imageFile_Faces': 'Images/Faces/AM32SAS.jpg', 'Expressions': 'Sadness', 'CorrResp': 2},
      {'imageFile_Faces': 'Images/Faces/AF04NES.jpg', 'Expressions': 'Neutrality', 'CorrResp': 3},
      {'imageFile_Faces': 'Images/Faces/AM05NES.jpg', 'Expressions': 'Neutrality', 'CorrResp': 3},
      {'imageFile_Faces': 'Images/Faces/AF08NES.jpg', 'Expressions': 'Neutrality', 'CorrResp': 3},
      {'imageFile_Faces': 'Images/Faces/AM07NES.jpg', 'Expressions': 'Neutrality', 'CorrResp': 3}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
    Routine Fix
    Routine Trial_RM
    Routine Response
    Routine Response_Conf
  LoopTerminator trials
  Routine Thanks
